PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 2
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s/%s' % (expInfo['Nombre'], expName)
  Experiment info = {'Nombre': '', 'Edad': '', 'Lateralidad': '["","Derecha","Izquierda"]', 'COM': 'list(range(1,25))'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = paradigma
  keyboardBackend = ioHub
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Routines
  Routine Bienvenida
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $open('resources/TextosInstrucciones/1.Bienvenida.txt', encoding='utf-8').read()
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dia_tipico
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  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Pulse ESPACIO para terminar
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Before Experiment:
        from audioRecorder import AudioRecorder
      Begin Experiment:
        puerto = 'COM' + expInfo['COM']
        cont_inst = -1
        cont_stim = 0
        recorder = AudioRecorder(mic_id = 0, sample_rate = 48000, channels = 1, arduino_port = puerto)
  Routine instrucciones
    RoutineSettingsComponent instrucciones
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        cont_inst += 1
        key_insultos.keys = []
    TextComponent instrucciones_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $open(f'resources/TextosInstrucciones/{cont_inst}.txt', encoding='utf-8').read()
    KeyboardComponent key_instrucciones
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine lamina
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    ImageComponent image_2
      image [set every repeat] = $f"resources/{instrucciones_filename[cont_inst]}.jpg"
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        recorder.start_recording(f'data/{expInfo["Nombre"]}/HospitalItaliano_{expInfo["Nombre"]}_{instrucciones_filename[cont_inst]}.wav')
      End Routine:
        recorder.stop_recording()
  Routine historia
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    CodeComponent code_4
      Code Type = Py
      Before Experiment:
        from audioRecorder import AudioRecorder
      Begin Experiment:
        puerto = 'COM' + expInfo['COM']
        cont_inst = -1
        instrucciones_filename = {
        0: "Bienvenida",
        1: "DiaTipico",
        2: "RecuerdoAgradable",
        3: "DescripcionDeLamina1",
        4: "DescripcionDeLamina2",
        5: "RenarracionDeHistoria",
        6: "LecturaDeParrafo",
        7: "VocalA",
        8: "Pataka",
        9: "CuestionarioYFin"
        }
        recorder = AudioRecorder(mic_id = 0, sample_rate = 48000, channels = 1, arduino_port = puerto)
      End Experiment:
        recorder._serial.close()
    SoundComponent audio_historia
      sound [set every repeat] = resources/Audio_re-narración.wav
      startVal [time (s)] = 0.0
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  Routine parrafo
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        recorder.start_recording(f'data/{expInfo["Nombre"]}/HospitalItaliano_{expInfo["Nombre"]}_{instrucciones_filename[cont_inst]}.wav')
      End Routine:
        recorder.stop_recording()
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        $open(f'resources/TextoA.txt', encoding='utf-8').read()
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora, por favor, cuénteme la historia con sus propias palabras. Brinde tanto detalle como sea posible

        Pulse ESPACIO para empezar a grabar
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine grabacion_con_estimulo
    RoutineSettingsComponent grabacion_con_estimulo
      skipIf = key_insultos.keys == 's'
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        recorder.start_recording(f'data/{expInfo["Nombre"]}/HospitalItaliano_{expInfo["Nombre"]}_{estimulo}.wav')
      End Routine:
        recorder.stop_recording()
    TextComponent text_estimulo
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every repeat] = $estimulo
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    SoundComponent sound_1
      saveStartStop = False
      sound = resources/beep.wav
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 0.5
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    TextComponent blank_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 5
      stopVal [duration (s)] = 60
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    KeyboardComponent interrupt
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 60
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  Routine instruciones_fijas
    RoutineSettingsComponent instruciones_fijas
      saveStartStop = False
      skipIf = letras.thisTrialN == 0
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    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ahora pasaremos a otra letra

        ¿Listo?


        Presione ESPACIO para continuar.
    KeyboardComponent key_letras
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones_fijas2
    RoutineSettingsComponent instrucciones_fijas2
      saveStartStop = False
      skipIf = categorias.thisTrialN == 0
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    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ahora pasaremos a otra categoría

        ¿Listo?


        Presione ESPACIO para continuar.
    KeyboardComponent key_categorias
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cruz_fijacion
    RoutineSettingsComponent cruz_fijacion
      saveStartStop = False
      skipIf = key_insultos.keys == 's'
      stopVal [duration (s)] = 0.65
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    TextComponent cruz_fijacion_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent blank
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.15
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  Routine stop_rec
    RoutineSettingsComponent stop_rec
      saveStartStop = False
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    CodeComponent code_7
      Code Type = Auto->JS
  Routine Instrucciones_Opcional
    RoutineSettingsComponent Instrucciones_Opcional
      saveStartStop = False
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    TextComponent text_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        MODULO OPCIONAL

        Presione ESPACIO para continuar
        Presione S para saltar
    KeyboardComponent key_insultos
      allowedKeys = 'space','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
  Routine grabacion_estimulo_fijo
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        recorder.start_recording(f'data/{expInfo["Nombre"]}/HospitalItaliano_{expInfo["Nombre"]}_INSULTOS.wav')
      End Routine:
        recorder.stop_recording()
    TextComponent text_insultos
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = INSULTOS
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    SoundComponent sound_2
      saveStartStop = False
      sound = resources/beep.wav
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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Flow
  Routine instrucciones
  Routine instrucciones
  LoopInitiator categorias loopType="TrialHandler"
    conditionsFile = resources/categorias.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'estimulo': 'ANIMALES'},
      {'estimulo': 'ACCIONES'},
      {'estimulo': 'OBJETOS DE SUPERMERCADO'}]
    Routine instrucciones_fijas2
    Routine cruz_fijacion
    Routine grabacion_con_estimulo
  LoopTerminator categorias
  Routine Instrucciones_Opcional
  LoopInitiator insultos loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = resources/opcional.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'estimulo': 'INSULTOS'},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None},
      {'estimulo': None}]
    Routine cruz_fijacion
    Routine grabacion_con_estimulo
  LoopTerminator insultos
  Routine instrucciones
  LoopInitiator letras loopType="TrialHandler"
    conditionsFile = resources/letras.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'estimulo': 'F'},
      {'estimulo': 'A'},
      {'estimulo': 'S'}]
    Routine instruciones_fijas
    Routine cruz_fijacion
    Routine grabacion_con_estimulo
  LoopTerminator letras
  Routine end
